#       A T T A C H    S Y S T E M 
/gate/systems/cylindricalPET/rsector/attach     panel
/gate/systems/cylindricalPET/module/attach     module
/gate/systems/cylindricalPET/submodule/attach  block
/gate/systems/cylindricalPET/crystal/attach     zlayer

#/gate/systems/cylindricalPET/layer1/attach    xlayer1
#/gate/systems/cylindricalPET/layer2/attach    xlayer2
#/gate/systems/cylindricalPET/layer3/attach    xlayer3
#/gate/systems/cylindricalPET/layer4/attach    xlayer4
#/gate/systems/cylindricalPET/layer5/attach    xlayer5
#/gate/systems/cylindricalPET/layer6/attach    xlayer6
#/gate/systems/cylindricalPET/layer7/attach    xlayer7
#/gate/systems/cylindricalPET/layer8/attach    xlayer8

#       A T T A C H    C R Y S T A L  SD

/gate/xlayer1/attachCrystalSD
/gate/xlayer2/attachCrystalSD
/gate/xlayer3/attachCrystalSD
/gate/xlayer4/attachCrystalSD
/gate/xlayer5/attachCrystalSD
/gate/xlayer6/attachCrystalSD
/gate/xlayer7/attachCrystalSD
/gate/xlayer8/attachCrystalSD


/gate/systems/cylindricalPET/describe

